#pragma rtGlobals=1		// Use modern global access method.

#include "FFT_Panel"
#include "FFT_Cubes"
#include "FFT_VoxelDisplay"
#include "FFT_FillMatrixShapes"
#include "FFT_Debye_Spheres"

#include "FFT_Cylinder_Fills"
#include "FFT_Cylinder_2D_Fill"
#include "FFT_Plane_Fills"
#include "FFT_Lattice_Fills"
#include "FFT_Sphere_Fills"

#include "FFT_ConcentratedSpheres"
#include "FFT_ConnectedRods"



Init_FFT()


Menu "Macros"
	"-"
	"Init_FFT"
	Submenu "Matrix Info"
		"Number of Points"
		"Fill Statistics"
		"Center_to_Center"
		"Davg_to_Np"
	end
	Submenu "Matrix Moving"
		"ParseMatrix 3D to XYZ"
		"Plot XYZ"
		"AnimatedS Slices"
		"Show Full Matrix"
	end
	Submenu "3D testing"
		"Connect Dots 3D"
		"Put Random Cylinders at Points"
		"Put X-axis Cylinders at Points"
		"Put X-axis Cylinders Square Grid",PutXAxisCylindersSquare()
		"Put X-axis Cylinders Hexagonal Grid",PutXAxisCylindersHexagonal()
		"Hexagonal Cylinders"
		"Conc Sphere Loop"
		"-"
		"Overnight"
	end
	Submenu "2D testing"
		"Test 2D"
		"Connect Dots 2D"
		"Erase 2D"
	end
	"-"
	"Include FFT Fit Functions"
End

// analysis must be loaded first
Proc IncludeFFTFitFunctions()
	NCNR_AnalysisLoader("Load NCNR Analysis Macros")
	Execute/P "INSERTINCLUDE \"FFT_Fit_Includes\""
	Execute/P "COMPILEPROCEDURES "
end